<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="Phantom_Reg_2.0:Phantom registration" 
      Description="No Video with Aurora tracker in Record lego phantom landmarks mode vtkPhantomRegistrationTest uses this configuration" />
		
	<!--BEGIN: Section of the tracker-->	
	<Device
      Id="TrackerDevice" 
      Type="AuroraTracker"
      SerialPort="3"
      BaudRate="115200"
      AcquisitionRate="50"
      LocalTimeOffsetSec="0.0"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Reference" PortName="0" />
        <DataSource Type="Tool" Id="Stylus" PortName="1" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Reference" />
          <DataSource Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
    </Device> 
	<!--END: Section of the tracker-->	
	
  </DataCollection>

  
	<!-- These are the data obtained from the stylus calibration -->
  <CoordinateDefinitions>
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        0.982193	0	-0.187877	-15.3289
        -0.046865	0.968389	-0.245003	-19.9898
        0.181938	0.249445	0.951144	77.6037
        0	0	0	1"
       Error="0.253857" Date="072618_160041" />
  </CoordinateDefinitions>

  <Rendering WorldCoordinateFrame="Reference">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
    <DisplayableObject Id="PhantomModel" Type="Model" ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_2.0.stl"
      ModelToObjectTransform="
        1 0 0 -35.0
        0 1 0 -10.0
        0 0 1 -5.0
        0 0 0 1" />
  </Rendering>

  <PhantomDefinition>
  <Description
    Name="fCAL"
    Type="Double-N"
    Version="2.0"
    WiringVersion="2.0"
    Institution="Queen's University PerkLab"
  />
  <Geometry>      
    <Pattern Type="NWire">
      <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0" />
      <Wire Name="8:L1_h1" EndPointFront="55.0 0.0 20.0" EndPointBack="35.0 40.0 20.0" />
      <Wire Name="9:M1_m1" EndPointFront="60.0 0.0 20.0" EndPointBack="60.0 40.0 20.0" />
    </Pattern>
    <Pattern Type="NWire">
      <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0" />
      <Wire Name="5:H3_l3" EndPointFront="35.0 0.0 10.0" EndPointBack="55.0 40.0 10.0" />
      <Wire Name="6:M3_m3" EndPointFront="60.0 0.0 10.0" EndPointBack="60.0 40.0 10.0" />
    </Pattern>
    <Pattern Type="NWire">
      <Wire Name="1:H5_h5" EndPointFront="35.0 0.0 0.0" EndPointBack="35.0 40.0 0.0" />
      <Wire Name="2:L5_i5" EndPointFront="55.0 0.0 0.0" EndPointBack="40.0 40.0 0.0" />
      <Wire Name="3:M5_m5" EndPointFront="60.0 0.0 0.0" EndPointBack="60.0 40.0 0.0" />
    </Pattern>
    <Landmarks>
      <Landmark Name="#1" Position="104.3 5.0 20.0" />
      <Landmark Name="#2" Position="104.3 45.0 20.0" />
      <Landmark Name="#3" Position="104.3 45.0 0.0" />
      <Landmark Name="#4" Position="104.3 -5.0 0.0" />
      <Landmark Name="#5" Position="-34.3 45.0 15.0" />
      <Landmark Name="#6" Position="-34.3 -5.0 20.0" />
      <Landmark Name="#7" Position="-34.3 -5.0 0.0" />
      <Landmark Name="#8" Position="-34.3 45.0 0.0" />
    </Landmarks>    
  </Geometry>
</PhantomDefinition>

  <fCal
    PhantomModelId="PhantomModel"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfStylusCalibrationPointsToAcquire="200"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    FixedChannelId="VideoStream" 
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackerStream" />
  
  <vtkPlusPivotCalibrationAlgo
    ObjectMarkerCoordinateFrame="Stylus"
    ReferenceCoordinateFrame="Reference"
    ObjectPivotPointCoordinateFrame="StylusTip" />

  <vtkPlusPhantomLandmarkRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" />
  
  <vtkPhantomLinearObjectRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" />

</PlusConfiguration>