<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="Test_02: Video streaming + Aurora tracker"
      Description=" Test the video streaming from the US using the Dazzle and the Aurora tracking

	  Sources: 
      https://www.pinnaclesys.com/en/products/dazzle/dvd-recorder-hd/
      http://perk-software.cs.queensu.ca/plus/doc/nightly/user/DeviceMicrosoftMediaFoundation.html"
    />
	
		<!--BEGIN: Section of the tracker-->	
	<Device
      Id="TrackerDevice" 
      Type="AuroraTracker"
      SerialPort="3"
      BaudRate="115200"
      AcquisitionRate="50"
      LocalTimeOffsetSec="0.0"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Reference" PortName="0" />
        <DataSource Type="Tool" Id="Stylus" PortName="1" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Reference" />
          <DataSource Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
    </Device> 
	<!--END: Section of the tracker-->	
	
	<!--BEGIN: Section of the grabber-->
	<Device
      Id="VideoDevice" 
      Type="MmfVideo" 
      FrameSize="640x480" 
      VideoFormat="YUY2"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" BufferSize="100" AveragedItemsForFiltering="20" />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
	
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturing="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
	<!--END: Section of the grabber-->
  </DataCollection>

  <CoordinateDefinitions>
  </CoordinateDefinitions>
  

</PlusConfiguration>
